// A complete elastix rigid parameter file in the style of the elastix model zoo,
// with fewer resolutions and iterations so the browser test stays short.
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")
(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "EulerTransform")
(Metric "AdvancedMattesMutualInformation")
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")
(NumberOfHistogramBins 32)
(NumberOfResolutions 2)
(MaximumNumberOfIterations 100)
(NumberOfSpatialSamples 2048)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")
(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)
(ResultImagePixelType "float")
